PsychoPy2experiment version="2022.2.5"
Settings
  Data filename = u'data/subject_%s/%s_%s_%s' % (expInfo['participant'], expInfo['participant'], expName, expInfo['date'])
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1680, 1050]
  expName = robot_sternberg_sign
  keyboardBackend = ioHub
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Routines
  Routine intro
    TextComponent intro_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text [set every repeat] = $f"{langage['intro']}"
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    KeyboardComponent intro_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixation
    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine block_intro
    TextComponent block_intro_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [condition] = $is_block_beginning==False
      text [set every repeat] = $f"{langage['Block']} {block} {langage[f'{stimuli} condition']} {condition} items \n\n{langage['Press space to begin']}"
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    KeyboardComponent block_intro_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [condition] = $is_block_beginning==False
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  Routine training_recall
    TextComponent training_recall_letter
      letterHeight = 0.15
      startVal [condition] = $len(target)==1
      text [set every repeat] = $target
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    MovieComponent training_recall_movie
      No audio = True
      backend = opencv
      forceEndRoutine = False
      movie [set every repeat] = $target_fname
      size = (0.3,0.5)
      startVal [condition] = $len(target)>1
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    KeyboardComponent training_recall_key
      allowedKeys = 'c', 'n'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    TextComponent training_recall_question
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text [set every repeat] = $langage['Item presented during the sequence ?']
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    TextComponent training_recall_answer
      letterHeight = 0.05
      pos = (0.03, -0.35)
      startVal [time (s)] = 0.0
      text [set every repeat] = $f"{langage['[c]orrect']}                    {langage['[n]ot correct']}"
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    CodeComponent end_training_recall_routine
      Code Type = Auto->JS
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      Each Frame:
        if (training_recall_movie.isFinished or len(target)==1) and len(training_recall_key.keys)>0:
            continueRoutine = False
  Routine training_intro
    TextComponent training_intro_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [condition] = $is_block_beginning==False
      text [set every repeat] = $f"{langage[f'Training with {stimuli} condition and']} {condition} items \n\n{langage['Press space to begin']}"
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    KeyboardComponent training_intro_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [condition] = $is_block_beginning==False
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  Routine experiment_beginning
    TextComponent experiment_beginning_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Are you ready to begin the experiment ?
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    TextComponent experiment_beginning_keys
      letterHeight = 0.05
      pos = (0.03, -0.35)
      startVal [time (s)] = 0.0
      text = [c]orrect                    [n]ot correct
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    KeyboardComponent experiment_beginning_key
      allowedKeys = 'c', 'n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent conditional_loop
      Code Type = Auto->JS
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      End Routine:
        if experiment_beginning_key.keys[0] == 'c':
            retraining.finished = True
  Routine update_variable
    CodeComponent update_sequence
      Code Type = Auto->JS
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      Begin Routine:
        sequence_fnames = literal_eval(sequence_fnames)
  Routine block_questionnaire
    SliderComponent RSME_labels
      flip = True
      forceEndRoutine = False
      granularity = 0
      labels = ("", "Absolutely no effort", "Almost no effort", "A little effort", "Some effort", "Rather much effort", "Considerable effort", "Great effort", "Very great effort", "Extreme effort", "")
      letterHeight = 0.02
      ori = 90
      pos = (-0.3, 0.02)
      readOnly = True
      size = (0.9, 0.02)
      startVal [time (s)] = 0.0
      stopVal [condition] = $is_block_ending==False or (RSME_key.rt!=[] and RSME_ticks.rt!=None and RSME_key.rt > RSME_ticks.rt)
      storeRating = False
      storeRatingTime = False
      styles = rating
      ticks = (0, 2,13,25,37,57,71,85,102,112, 150)
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    SliderComponent RSME_ticks
      forceEndRoutine = False
      granularity = 0
      labels = (0, 10, 20, 30, 40, 50, 60, 70, 80, 90, 100, 110, 120, 130, 140, 150)
      letterHeight = 0.03
      ori = 90
      pos = (-0.3, 0.02)
      size = (0.9, 0.03)
      startVal [time (s)] = 0.0
      stopVal [condition] = $is_block_ending==False or (RSME_key.rt!=[] and RSME_ticks.rt!=None and RSME_key.rt > RSME_ticks.rt)
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (0, 10, 20, 30, 40, 50, 60, 70, 80, 90, 100, 110, 120, 130, 140, 150)
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    TextComponent RSME_text
      letterHeight = 0.03
      pos = (0.4, 0)
      startVal [time (s)] = 0.0
      stopVal [condition] = $is_block_ending==False or (RSME_key.rt!=[] and RSME_ticks.rt!=None and RSME_key.rt > RSME_ticks.rt)
      text [set every repeat] = $f"{langage['Indicate your cognitive effort level by cliking on the scale']}\n\n{langage['Press space to confirm']}"
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    KeyboardComponent RSME_key
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [condition] = $is_block_ending==False or (RSME_key.rt!=[] and RSME_ticks.rt!=None and RSME_key.rt > RSME_ticks.rt)
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    CodeComponent label_translation
      Code Type = Auto->JS
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      Begin Routine:
        labels = [langage[label] if label in base_txt else label for label in RSME_labels.labels]
        RSME_labels.labels = labels
        for i, obj in enumerate(RSME_labels.labelObjs):
            # ...set its text to be the corresponding value in labels, and store this in the slider
            obj.text = RSME_labels.labels[i]
  Routine langage_selection2
    CodeComponent translations_3
      Code Type = Auto->JS
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      Before Experiment:
        langage = None

        base_txt = [
        'intro',
        'Training with letter condition and sequence size',
        'Training with robot condition and sequence size',
        ]

        langage_mapping = {'e':'en', 'f':'fr'}

        langages = {

        'en':{
        'intro':'Welcome to this english experiment',
        'Training with letter condition and sequence size':'Training with letter condition and sequence size',
        'Training with robot condition and sequence size':'Training with robot condition and sequence size',
        },

        'fr':{
        'intro':'Bienvenue dans cette expérience en français',
        },

        }
    TextComponent langage_text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Press (E) to do the experiment in English

        Appuyez sur (F) pour faire l'expérience en français
    KeyboardComponent langage_key_3
      allowedKeys = 'e', 'f'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent init_code_3
      Code Type = Auto->JS
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      End Routine:
        langage = langages[langage_mapping[langage_key.keys]]
        subject_dir = f"data\\subject_{expInfo['participant']}"
  Routine langage_selection
    CodeComponent translations
      Code Type = Auto->JS
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      Before Experiment:
        langage = None

        base_txt = [
         'intro',
         'Training with letter condition and',
         'Training with robot condition and',
         'letter condition',
         'robot condition',
         'Item presented during the sequence ?',
         '[c]orrect',
         '[n]ot correct',
         'Press space to confirm',
         'Press space to begin',
         'Are you ready to begin the experiment ?',
         'Block',
         '',
         'Absolutely no effort',
         'Almost no effort',
         'A little effort',
         'Some effort',
         'Rather much effort',
         'Considerable effort',
         'Great effort',
         'Very great effort',
         'Extreme effort',
         'Indicate your cognitive effort level by cliking on the scale',
         ]

        langage_mapping = {'e':'en', 'f':'fr'}

        langages = {

        'en':{
         'intro': 'Welcome to the Stenberg task!\n\nIn this task, you will be presented with a sequence of 2, 4 or 6 items, whether letters or videos. Then, a letter or video will be displayed and you will be asked whether it appeared in the presented sequence.\n\nPress C for [c]orrect or N for [n]ot correct.\n\nYou will also be asked to tell us how difficult you perceived the task to be, ranging from Absolutely no effort (2) to Extreme effort (112).\n\nPress space to begin!',
         'Training with letter condition and':'Training with letter condition and',
         'Training with robot condition and':'Training with robot condition and',
         'letter condition':'letter condition',
         'robot condition':'robot condition',
         'Item presented during the sequence ?':'Item presented during the sequence ?',
         '[c]orrect': '[c]orrect',
         '[n]ot correct': '[n]ot correct',
         'Press space to confirm': 'Press space to confirm',
         'Press space to begin': 'Press space to begin',
         'Are you ready to begin the experiment ?': 'Are you ready to begin the experiment ?',
         'Block': 'Block',
         '': '',
         'Absolutely no effort': 'Absolutely no effort',
         'Almost no effort': 'Almost no effort',
         'A little effort': 'A little effort',
         'Some effort': 'Some effort',
         'Rather much effort': 'Rather much effort',
         'Considerable effort': 'Considerable effort',
         'Great effort': 'Great effort',
         'Very great effort': 'Very great effort',
         'Extreme effort': 'Extreme effort',
         'Indicate your cognitive effort level by cliking on the scale': 'Indicate your cognitive effort level by cliking on the scale',
         },


        'fr':{
         'intro': "Bienvenue à la tâche de Stenberg !\n\nDans cette tâche, une séquence de 2, 4 ou 6 items vous sera présentée, qu’il s’agisse de lettres ou de vidéos. Ensuite, une lettre ou une vidéo s’affichera et vous devrez déterminer si elle était apparue dans la séquence présentée.\n\nAppuyez sur C pour [c]orrect ou N pour [n]on correct.\n\nOn vous demandera également d'évaluer la difficulté perçue de la tâche, allant de Absolument aucun effort (2) à Effort extrême (112) \n\nAppuyez sur espace pour commencer !",
         'Training with letter condition and':'Entraînement avec la condition lettre et',
         'Training with robot condition and':'Entraînement avec la condition robot et',
         'letter condition':'condition lettre',
         'robot condition':'condition robot',
         'Item presented during the sequence ?':'Item présenté pendant la séquence ?',
         '[c]orrect': '[c]orrect',
         '[n]ot correct': '[n]on correct',
         'Press space to confirm': 'Appuyez sur espace pour confirmer',
         'Press space to begin': 'Appuyez sur espace pour commencer',
         'Are you ready to begin the experiment ?': "Êtes vous prêt à commencer l'expérience ?",
         'Block': 'Bloc',
         '': '',
         'Absolutely no effort': 'Absolument aucun effort',
         'Almost no effort': 'Presque aucun effort',
         'A little effort': "Un petit effort",
         'Some effort': "Des efforts",
         'Rather much effort': "Beaucoup d'effort",
         'Considerable effort': 'Effort considérable',
         'Great effort': 'Grand effort',
         'Very great effort': 'Très grand effort',
         'Extreme effort': 'Effort extrême',
         'Indicate your cognitive effort level by cliking on the scale': "Indiquez votre niveau d'effort cognitif en cliquant sur l'échelle",
         },

        }
    TextComponent langage_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Press (E) to do the experiment in English

        Appuyez sur (F) pour faire l'expérience en français
    KeyboardComponent langage_key
      allowedKeys = 'e', 'f'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent init_code
      Code Type = Auto->JS
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      End Routine:
        langage = langages[langage_mapping[langage_key.keys]]
        subject_dir = f"data\\subject_{expInfo['participant']}"
  Routine recall_old
  Routine recall
    TextComponent recall_letter
      letterHeight = 0.15
      startVal [condition] = $len(target)==1
      text [set every repeat] = $target
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    MovieComponent recall_movie
      No audio = True
      backend = opencv
      forceEndRoutine = False
      movie [set every repeat] = $target_fname
      size = (0.3,0.5)
      startVal [condition] = $len(target)>1
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    KeyboardComponent recall_key
      allowedKeys = 'c', 'n'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    CodeComponent end_recall_routine
      Code Type = Auto->JS
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      Each Frame:
        if (recall_movie.isFinished or len(target)==1) and len(recall_key.keys)>0:
            continueRoutine = False
    TextComponent recall_question
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text [set every repeat] = $langage['Item presented during the sequence ?']
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    TextComponent recall_answer
      letterHeight = 0.05
      pos = (0.03, -0.35)
      startVal [time (s)] = 0.0
      text [set every repeat] = $f"{langage['[c]orrect']}                    {langage['[n]ot correct']}"
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  Routine training_presentation
    MovieComponent training_presentation_movie
      No audio = True
      backend = opencv
      forceEndRoutine = True
      movie [set every repeat] = $sequence_fnames[training_sequence_loop.thisN]
      size = (0.3,0.5)
      startVal [condition] = $len(sequence[training_sequence_loop.thisN])>1
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    TextComponent training_presentation_letter
      letterHeight = 0.15
      startVal [condition] = $len(sequence[training_sequence_loop.thisN])==1
      stopVal [duration (s)] = 2
      text [set every repeat] = $sequence[training_sequence_loop.thisN]
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    CodeComponent end_training_presentation_sequence
      Code Type = Auto->JS
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      End Routine:
        next_N = training_sequence_loop.thisN + 1
        if next_N >= len(sequence_fnames):
            training_sequence_loop.finished = True
    CodeComponent training_presentation_letter_force_end
      Code Type = Auto->JS
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      Each Frame:
        if training_presentation_letter.status == FINISHED:
            continueRoutine = False
  Routine presentation
    MovieComponent presentation_movie
      No audio = True
      backend = opencv
      forceEndRoutine = True
      movie [set every repeat] = $sequence_fnames[sequence_loop.thisN]
      size = (0.3,0.5)
      startVal [condition] = $len(sequence[sequence_loop.thisN])>1
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    TextComponent presentation_letter
      letterHeight = 0.15
      startVal [condition] = $len(sequence[sequence_loop.thisN])==1
      stopVal [duration (s)] = 2
      text [set every repeat] = $sequence[sequence_loop.thisN]
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    CodeComponent end_presentation_sequence
      Code Type = Auto->JS
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      End Routine:
        next_N = sequence_loop.thisN + 1
        if next_N >= len(sequence_fnames):
            sequence_loop.finished = True
    CodeComponent presentation_letter_force_end
      Code Type = Auto->JS
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      Each Frame:
        if presentation_letter.status == FINISHED:
            continueRoutine = False
Flow
  Routine langage_selection
  Routine intro
  LoopInitiator retraining loopType="TrialHandler"
    loopType = sequential
    nReps = 50
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    LoopInitiator training loopType="TrialHandler"
      conditionsFile = $f"{subject_dir}\\conditions_sternberg_training.csv"
      loopType = sequential
      nReps = 1
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      Routine training_intro
      Routine fixation
      LoopInitiator training_sequence_loop loopType="TrialHandler"
        isTrials = False
        loopType = sequential
        nReps = 50
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        Routine training_presentation
      LoopTerminator training_sequence_loop
      Routine fixation
      Routine training_recall
      Routine block_questionnaire
    LoopTerminator training
    Routine experiment_beginning
  LoopTerminator retraining
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $f"{subject_dir}\\conditions_sternberg.csv"
    loopType = sequential
    nReps = 1
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    Routine block_intro
    Routine fixation
    LoopInitiator sequence_loop loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 50
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      Routine presentation
    LoopTerminator sequence_loop
    Routine fixation
    Routine recall
    Routine block_questionnaire
  LoopTerminator trials
